PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ERT2
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      stopVal [duration (s)] = 3.0
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome to Phase 2 of the Emotion Recognition Task!
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    ResourceManagerComponent resources_2
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['index.html', 'Practice_Stimuli.xlsx', 'EmotionFace_Stimuli.xlsx', 'Practice/010_y_f_s_a.jpg', 'Practice/013_y_m_n_a.jpg', 'Practice/022_y_f_s_b.jpg', 'Practice/031_y_m_f_a.jpg', 'Practice/090_y_f_a_b.jpg', 'Practice/175_y_m_f_a.jpg', 'Trustworthiness/008_y_m_a_b.jpg', 'Trustworthiness/008_y_m_f_b.jpg', 'Trustworthiness/008_y_m_h_b.jpg', 'Trustworthiness/008_y_m_n_b.jpg', 'Trustworthiness/008_y_m_s_b.jpg', 'Trustworthiness/016_y_m_a_b.jpg', 'Trustworthiness/016_y_m_f_b.jpg', 'Trustworthiness/016_y_m_h_b.jpg', 'Trustworthiness/016_y_m_n_b.jpg', 'Trustworthiness/016_y_m_s_b.jpg', 'Trustworthiness/020_y_f_a_a.jpg', 'Trustworthiness/020_y_f_f_a.jpg', 'Trustworthiness/020_y_f_h_a.jpg', 'Trustworthiness/020_y_f_n_a.jpg', 'Trustworthiness/020_y_f_s_a.jpg', 'Trustworthiness/022_y_f_a_b.jpg', 'Trustworthiness/022_y_f_f_b.jpg', 'Trustworthiness/022_y_f_h_b.jpg', 'Trustworthiness/022_y_f_n_b.jpg', 'Trustworthiness/022_y_f_s_b.jpg', 'Trustworthiness/028_y_f_a_a.jpg', 'Trustworthiness/028_y_f_f_a.jpg', 'Trustworthiness/028_y_f_h_a.jpg', 'Trustworthiness/028_y_f_n_a.jpg', 'Trustworthiness/028_y_f_s_a.jpg', 'Trustworthiness/034_y_f_a_a.jpg', 'Trustworthiness/034_y_f_f_a.jpg', 'Trustworthiness/034_y_f_h_a.jpg', 'Trustworthiness/034_y_f_n_a.jpg', 'Trustworthiness/034_y_f_s_a.jpg', 'Trustworthiness/041_y_m_a_b.jpg', 'Trustworthiness/041_y_m_f_b.jpg', 'Trustworthiness/041_y_m_h_b.jpg', 'Trustworthiness/041_y_m_n_b.jpg', 'Trustworthiness/041_y_m_s_b.jpg', 'Trustworthiness/048_y_f_a_a.jpg', 'Trustworthiness/048_y_f_f_a.jpg', 'Trustworthiness/048_y_f_h_a.jpg', 'Trustworthiness/048_y_f_n_a.jpg', 'Trustworthiness/048_y_f_s_a.jpg', 'Trustworthiness/057_y_m_a_a.jpg', 'Trustworthiness/057_y_m_f_a.jpg', 'Trustworthiness/057_y_m_h_a.jpg', 'Trustworthiness/057_y_m_n_a.jpg', 'Trustworthiness/057_y_m_s_a.jpg', 'Trustworthiness/066_y_m_a_a.jpg', 'Trustworthiness/066_y_m_f_a.jpg', 'Trustworthiness/066_y_m_h_a.jpg', 'Trustworthiness/066_y_m_n_a.jpg', 'Trustworthiness/066_y_m_s_a.jpg', 'Trustworthiness/069_y_f_a_b.jpg', 'Trustworthiness/069_y_f_f_b.jpg', 'Trustworthiness/069_y_f_h_b.jpg', 'Trustworthiness/069_y_f_n_b.jpg', 'Trustworthiness/069_y_f_s_b.jpg', 'Trustworthiness/081_y_m_a_a.jpg', 'Trustworthiness/081_y_m_f_a.jpg', 'Trustworthiness/081_y_m_h_a.jpg', 'Trustworthiness/081_y_m_n_a.jpg', 'Trustworthiness/081_y_m_s_a.jpg', 'Trustworthiness/098_y_f_a_b.jpg', 'Trustworthiness/098_y_f_f_b.jpg', 'Trustworthiness/098_y_f_h_b.jpg', 'Trustworthiness/098_y_f_n_b.jpg', 'Trustworthiness/098_y_f_s_b.jpg', 'Trustworthiness/101_y_f_a_a.jpg', 'Trustworthiness/101_y_f_f_a.jpg', 'Trustworthiness/101_y_f_h_a.jpg', 'Trustworthiness/101_y_f_n_a.jpg', 'Trustworthiness/101_y_f_s_a.jpg', 'Trustworthiness/115_y_f_a_b.jpg', 'Trustworthiness/115_y_f_f_b.jpg', 'Trustworthiness/115_y_f_h_b.jpg', 'Trustworthiness/115_y_f_n_b.jpg', 'Trustworthiness/115_y_f_s_b.jpg', 'Trustworthiness/119_y_m_a_b.jpg', 'Trustworthiness/119_y_m_f_b.jpg', 'Trustworthiness/119_y_m_h_b.jpg', 'Trustworthiness/119_y_m_n_b.jpg', 'Trustworthiness/119_y_m_s_b.jpg', 'Trustworthiness/123_y_m_a_a.jpg', 'Trustworthiness/123_y_m_f_a.jpg', 'Trustworthiness/123_y_m_h_a.jpg', 'Trustworthiness/123_y_m_n_a.jpg', 'Trustworthiness/123_y_m_s_a.jpg', 'Trustworthiness/132_y_f_a_a.jpg', 'Trustworthiness/132_y_f_f_a.jpg', 'Trustworthiness/132_y_f_h_a.jpg', 'Trustworthiness/132_y_f_n_a.jpg', 'Trustworthiness/132_y_f_s_a.jpg', 'Trustworthiness/144_y_m_a_a.jpg', 'Trustworthiness/144_y_m_f_a.jpg', 'Trustworthiness/144_y_m_h_a.jpg', 'Trustworthiness/144_y_m_n_a.jpg', 'Trustworthiness/144_y_m_s_a.jpg', 'Trustworthiness/160_y_m_a_b.jpg', 'Trustworthiness/160_y_m_f_b.jpg', 'Trustworthiness/160_y_m_h_b.jpg', 'Trustworthiness/160_y_m_n_b.jpg', 'Trustworthiness/160_y_m_s_b.jpg', 'Trustworthiness/162_y_f_a_a.jpg', 'Trustworthiness/162_y_f_f_a.jpg', 'Trustworthiness/162_y_f_h_a.jpg', 'Trustworthiness/162_y_f_n_a.jpg', 'Trustworthiness/162_y_f_s_a.jpg', 'Trustworthiness/167_y_m_a_b.jpg', 'Trustworthiness/167_y_m_f_b.jpg', 'Trustworthiness/167_y_m_h_b.jpg', 'Trustworthiness/167_y_m_n_b.jpg', 'Trustworthiness/167_y_m_s_b.jpg', 'Trustworthiness/175_y_m_a_a.jpg', 'Trustworthiness/175_y_m_f_a.jpg', 'Trustworthiness/175_y_m_h_a.jpg', 'Trustworthiness/175_y_m_n_a.jpg', 'Trustworthiness/175_y_m_s_a.jpg', 'Trustworthiness/182_y_f_a_a.jpg', 'Trustworthiness/182_y_f_f_a.jpg', 'Trustworthiness/182_y_f_h_a.jpg', 'Trustworthiness/182_y_f_n_a.jpg', 'Trustworthiness/182_y_f_s_a.jpg']
      startVal [time (s)] = 0
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a fixation cross followed by a photograph of an emotionally expressive face. Your task is to select the appropriate emotion from the labels presented on the screen: angry, disgusted, happy, sad, surprised, or scared.

        Please answer as quickly and as accurately as possible. You will begin with a set of practice trials before moving on to the real task.

        When you are ready to proceed, press any key to continue.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationcross
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    ImageComponent fixation
      disabled = True
      image = fixation_cross.png
      saveStartStop = False
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_7
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine FaceStimuli
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    ImageComponent FaceStimuli1
      image [set every repeat] = $EmotionFace_Stimuli
      saveStartStop = False
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Blank
    RoutineSettingsComponent Blank
      stopVal [duration (s)] = 0.5
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  Routine EmotionResponse
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which emotion is the face displaying?
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    MouseComponent mouse_2
      clickable = 'button1', 'button2', 'button3', 'button4', 'button5', 'button6'
      correctAns = Correct_Answer
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if Correct_Answer == 'none':
            continueRoutine = True  # This keeps the trial running but ignores correctness checking
        else:
            continueRoutine = True  # Proceed normally for non-neutral expressions

        if gotValidClick == True :
            continueRoutine == True # Ensures the routine continues if there was a valid click
    ButtonComponent Surprise
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.5, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Surprise
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    ButtonComponent Fear
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.3, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Fear
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    ButtonComponent Anger
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.1, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Anger
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    ButtonComponent Happy
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.1, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Happy
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    ButtonComponent Sad
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.3, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Sad
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    ButtonComponent Disgust
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.5, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Disgust
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Define the original list of emotions
        emotions = ["Happy", "Sad", "Surprise", "Anger", "Fear", "Disgust"]

        # Randomize the order
        shuffled_emotions = emotions.copy()
        shuffle(shuffled_emotions)

        # Assign the randomized labels to the buttons
        button1.text = shuffled_emotions[0]
        button2.text = shuffled_emotions[1]
        button3.text = shuffled_emotions[2]
        button4.text = shuffled_emotions[3]
        button5.text = shuffled_emotions[4]
        button6.text = shuffled_emotions[5]
      End Routine:
        # Record the selected response
        response_index = buttons.getPressedIndices()[0]  # Index of the selected button
        selected_emotion = shuffled_emotions[response_index]
        thisExp.addData("Selected Emotion", selected_emotion)
  Routine EndMessage
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of Task.

        You may now press any key to terminate this window.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine PracticeFaces
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    ImageComponent practicefaces
      image [set every repeat] = $Practice_Faces
      saveStartStop = False
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Instructions2
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The practice trials are now complete. The real task trials will now begin.

        When you are ready, press any key to continue. The first trial will begin immediately.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine resource_upload
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    ResourceManagerComponent resources
      actionType = Start Only
      checkAll = False
      forceEndRoutine = False
      resources = ['Trustworthiness/008_y_m_a_b.jpg', 'Trustworthiness/008_y_m_f_b.jpg', 'Trustworthiness/008_y_m_h_b.jpg', 'Trustworthiness/008_y_m_n_b.jpg', 'Trustworthiness/008_y_m_s_b.jpg', 'Trustworthiness/016_y_m_a_b.jpg', 'Trustworthiness/016_y_m_f_b.jpg', 'Trustworthiness/016_y_m_h_b.jpg', 'Trustworthiness/016_y_m_n_b.jpg', 'Trustworthiness/016_y_m_s_b.jpg', 'Trustworthiness/020_y_f_a_a.jpg', 'Trustworthiness/020_y_f_f_a.jpg', 'Trustworthiness/020_y_f_h_a.jpg', 'Trustworthiness/020_y_f_n_a.jpg', 'Trustworthiness/020_y_f_s_a.jpg', 'Trustworthiness/028_y_f_a_a.jpg', 'Trustworthiness/028_y_f_f_a.jpg', 'Trustworthiness/028_y_f_h_a.jpg', 'Trustworthiness/028_y_f_n_a.jpg', 'Trustworthiness/028_y_f_s_a.jpg', 'Trustworthiness/034_y_f_a_a.jpg', 'Trustworthiness/034_y_f_f_a.jpg', 'Trustworthiness/034_y_f_h_a.jpg', 'Trustworthiness/034_y_f_n_a.jpg', 'Trustworthiness/034_y_f_s_a.jpg', 'Trustworthiness/048_y_f_a_a.jpg', 'Trustworthiness/048_y_f_f_a.jpg', 'Trustworthiness/048_y_f_h_a.jpg', 'Trustworthiness/048_y_f_n_a.jpg', 'Trustworthiness/048_y_f_s_a.jpg', 'Trustworthiness/057_y_m_a_a.jpg', 'Trustworthiness/057_y_m_f_a.jpg', 'Trustworthiness/057_y_m_h_a.jpg', 'Trustworthiness/057_y_m_n_a.jpg', 'Trustworthiness/057_y_m_s_a.jpg', 'Trustworthiness/081_y_m_a_a.jpg', 'Trustworthiness/081_y_m_f_a.jpg', 'Trustworthiness/081_y_m_h_a.jpg', 'Trustworthiness/081_y_m_n_a.jpg', 'Trustworthiness/081_y_m_s_a.jpg', 'Trustworthiness/101_y_f_a_a.jpg', 'Trustworthiness/101_y_f_f_a.jpg', 'Trustworthiness/101_y_f_h_a.jpg', 'Trustworthiness/101_y_f_n_a.jpg', 'Trustworthiness/101_y_f_s_a.jpg', 'Trustworthiness/115_y_f_a_b.jpg', 'Trustworthiness/115_y_f_f_b.jpg', 'Trustworthiness/115_y_f_h_b.jpg', 'Trustworthiness/115_y_f_n_b.jpg', 'Trustworthiness/115_y_f_s_b.jpg', 'Trustworthiness/119_y_m_a_b.jpg', 'Trustworthiness/119_y_m_f_b.jpg', 'Trustworthiness/119_y_m_h_b.jpg', 'Trustworthiness/119_y_m_n_b.jpg', 'Trustworthiness/119_y_m_s_b.jpg', 'Trustworthiness/123_y_m_a_a.jpg', 'Trustworthiness/123_y_m_f_a.jpg', 'Trustworthiness/123_y_m_h_a.jpg', 'Trustworthiness/123_y_m_n_a.jpg', 'Trustworthiness/123_y_m_s_a.jpg', 'Trustworthiness/160_y_m_a_b.jpg', 'Trustworthiness/160_y_m_f_b.jpg', 'Trustworthiness/160_y_m_h_b.jpg', 'Trustworthiness/160_y_m_n_b.jpg', 'Trustworthiness/160_y_m_s_b.jpg', 'Trustworthiness/162_y_f_a_a.jpg', 'Trustworthiness/162_y_f_f_a.jpg', 'Trustworthiness/162_y_f_h_a.jpg', 'Trustworthiness/162_y_f_n_a.jpg', 'Trustworthiness/162_y_f_s_a.jpg', 'Trustworthiness/167_y_m_a_b.jpg', 'Trustworthiness/167_y_m_f_b.jpg', 'Trustworthiness/167_y_m_h_b.jpg', 'Trustworthiness/167_y_m_n_b.jpg', 'Trustworthiness/167_y_m_s_b.jpg', 'Trustworthiness/182_y_f_a_a.jpg', 'Trustworthiness/182_y_f_f_a.jpg', 'Trustworthiness/182_y_f_h_a.jpg', 'Trustworthiness/182_y_f_n_a.jpg', 'Trustworthiness/182_y_f_s_a.jpg', 'EmotionFace_Stimuli.xlsx']
      startVal [time (s)] = 0
    StaticComponent ISI
      startVal [time (s)] = 0.0
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  Routine Response
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which emotion is the face displaying?
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    MouseComponent mouse
      clickable = 'button1', 'button2', 'button3', 'button4', 'button5', 'button6'
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if Correct_Answer == 'none':
            continueRoutine = True  # This keeps the trial running but ignores correctness checking
        else:
            continueRoutine = True  # Proceed normally for non-neutral expressions

        if gotValidClick == True :
            continueRoutine == True # Ensures the routine continues if there was a valid click
    ButtonComponent button1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.5, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $button1.text
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    ButtonComponent button2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.3, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $button2.text
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    ButtonComponent button3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.1, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $button3.text
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    ButtonComponent button4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.1, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $button4.text
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    ButtonComponent button5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.3, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $button5.text
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    ButtonComponent button6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.5, -0.2)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $button6.text
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Define the original list of emotions
        emotions = ["Happy", "Sad", "Surprised", "Angry", "Scared", "Disgusted"]

        # Randomize the order
        shuffled_emotions = emotions.copy()
        shuffle(shuffled_emotions)

        # Assign the randomized labels to the buttons
        button1.text = shuffled_emotions[0]
        button2.text = shuffled_emotions[1]
        button3.text = shuffled_emotions[2]
        button4.text = shuffled_emotions[3]
        button5.text = shuffled_emotions[4]
        button6.text = shuffled_emotions[5]
      End Routine:
        # Get the list of button presses (True/False for each button)
        button_responses = [button1.isClicked, button2.isClicked, button3.isClicked, button4.isClicked, button5.isClicked, button6.isClicked]

        # Find the index of the pressed button
        if any(button_responses):  # Check if any button was pressed
            response_index = button_responses.index(True)  # Get the index of the pressed button
            selected_emotion = shuffled_emotions[response_index]  # Map to the corresponding emotion
            thisExp.addData("Selected_Emotion", selected_emotion)  # Log the response
        else:
            selected_emotion = "No Response"  # Handle case where no button was pressed
            thisExp.addData("Selected_Emotion", selected_emotion)
Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = Practice_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Practice_Faces': 'Practice/010_y_f_s_a.jpg'},
      {'Practice_Faces': 'Practice/013_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/022_y_f_s_b.jpg'},
      {'Practice_Faces': 'Practice/031_y_m_f_a.jpg'},
      {'Practice_Faces': 'Practice/090_y_f_a_b.jpg'},
      {'Practice_Faces': 'Practice/175_y_m_f_a.jpg'}]
    Routine fixationcross
    Routine PracticeFaces
    Routine Blank
    Routine Response
  LoopTerminator practice
  Routine Instructions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = EmotionFace_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'EmotionFace_Stimuli': 'Trustworthiness/081_y_m_n_a.jpg', 'Face_ID': '081_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/160_y_m_n_b.jpg', 'Face_ID': '160_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/167_y_m_n_b.jpg', 'Face_ID': '167_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/057_y_m_n_a.jpg', 'Face_ID': '057_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/162_y_f_n_a.jpg', 'Face_ID': '162_f', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/034_y_f_n_a.jpg', 'Face_ID': '034_f', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/020_y_f_n_a.jpg', 'Face_ID': '020_f', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/101_y_f_n_a.jpg', 'Face_ID': '101_f', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/123_y_m_n_a.jpg', 'Face_ID': '123_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/008_y_m_n_b.jpg', 'Face_ID': '008_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/119_y_m_n_b.jpg', 'Face_ID': '119_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/016_y_m_n_b.jpg', 'Face_ID': '016_m', 'Correct_Answer': 'Surprise'},
      {'EmotionFace_Stimuli': 'Trustworthiness/048_y_f_n_a.jpg', 'Face_ID': '048_f', 'Correct_Answer': 'Surprise'}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
    Routine fixationcross
    Routine FaceStimuli
    Routine Blank
    Routine Response
  LoopTerminator trials
  Routine EndMessage
